objref  recTime
objref  recvnode20,recvnode19,recvnode18,recvnode17,recvnode16,recvnode15,recvnode14,recvnode13,recvnode12,recvnode11,recvnode10,recvnode9,recvnode8,recvnode7,recvnode6,recvnode5,recvnode4,recvnode3,recvnode2,recvnode1,recvnode0

objref recko0,recko1,recko2,recko3,recko4,recko5,recko6,recko7,recko8,recko9,recko10,recko11,recko12,recko13,recko14,recko15,recko16,recko17,recko18,recko19,recko20

objref rechna0,rechna1,rechna2,rechna3,rechna4,rechna5,rechna6,rechna7,rechna8,rechna9,rechna10,rechna11,rechna12,rechna13,rechna14,rechna15,rechna16,rechna17,rechna18,rechna19,rechna20

//objref recmk0,recmk1,recmk2,recmk3,recmk4,recmk5,recmk6,recmk7,recmk8,recmk9,recmk10,recmk11,recmk12,recmk13,recmk14,recmk15,recmk16,recmk17,recmk18,recmk19,recmk20

objref  recvais,recvsoma
//objref  recmna,rechna,recnk,recina,recik

recTime=new Vector()
//recV=new Vector()
recvnode20=new Vector()
recvnode19=new Vector()
recvnode18=new Vector()
recvnode17=new Vector()
recvnode16=new Vector()
recvnode15=new Vector()
recvnode14=new Vector()
recvnode13=new Vector()
recvnode12=new Vector()
recvnode11=new Vector()
recvnode10=new Vector()
recvnode9=new Vector()
recvnode8=new Vector()
recvnode7=new Vector()
recvnode6=new Vector()
recvnode5=new Vector()
recvnode4=new Vector()
recvnode3=new Vector()
recvnode2=new Vector()
recvnode1=new Vector()
recvnode0=new Vector()

recko0=new Vector()
recko1=new Vector()
recko2=new Vector()
recko3=new Vector()
recko4=new Vector()
recko5=new Vector()
recko6=new Vector()
recko7=new Vector()
recko8=new Vector()
recko9=new Vector()
recko10=new Vector()
recko11=new Vector()
recko12=new Vector()
recko13=new Vector()
recko14=new Vector()
recko15=new Vector()
recko16=new Vector()
recko17=new Vector()
recko18=new Vector()
recko19=new Vector()
recko20=new Vector()

rechna0=new Vector()
rechna1=new Vector()
rechna2=new Vector()
rechna3=new Vector()
rechna4=new Vector()
rechna5=new Vector()
rechna6=new Vector()
rechna7=new Vector()
rechna8=new Vector()
rechna9=new Vector()
rechna10=new Vector()
rechna11=new Vector()
rechna12=new Vector()
rechna13=new Vector()
rechna14=new Vector()
rechna15=new Vector()
rechna16=new Vector()
rechna17=new Vector()
rechna18=new Vector()
rechna19=new Vector()
rechna20=new Vector()
/*
recmk0=new Vector()
recmk1=new Vector()
recmk2=new Vector()
recmk3=new Vector()
recmk4=new Vector()
recmk5=new Vector()
recmk6=new Vector()
recmk7=new Vector()
recmk8=new Vector()
recmk9=new Vector()
recmk10=new Vector()
recmk11=new Vector()
recmk12=new Vector()
recmk13=new Vector()
recmk14=new Vector()
recmk15=new Vector()
recmk16=new Vector()
recmk17=new Vector()
recmk18=new Vector()
recmk19=new Vector()
recmk20=new Vector()
*/
//recmna=new Vector()
//rechna=new Vector()
//recnk=new Vector()
//recina=new Vector()
//recik=new Vector()
recvais=new Vector()
recvsoma=new Vector()

recTime.record(&t)
//recV.record(&vrec)

recvnode20.record(&node[20].v(0.5))
recvnode19.record(&node[19].v(0.5))
recvnode18.record(&node[18].v(0.5))
recvnode17.record(&node[17].v(0.5))
recvnode16.record(&node[16].v(0.5))
recvnode15.record(&node[15].v(0.5))
recvnode14.record(&node[14].v(0.5))
recvnode13.record(&node[13].v(0.5))
recvnode12.record(&node[12].v(0.5))
recvnode11.record(&node[11].v(0.5))
recvnode10.record(&node[10].v(0.5))
recvnode9.record(&node[9].v(0.5))
recvnode8.record(&node[8].v(0.5))
recvnode7.record(&node[7].v(0.5))
recvnode6.record(&node[6].v(0.5))
recvnode5.record(&node[5].v(0.5))
recvnode4.record(&node[4].v(0.5))
recvnode3.record(&node[3].v(0.5))
recvnode2.record(&node[2].v(0.5))
recvnode1.record(&node[1].v(0.5))
recvnode0.record(&node[0].v(0.5))

recko0.record(&PS[0].ko(0.5))
recko1.record(&PS[2].ko(0.5))
recko2.record(&PS[4].ko(0.5))
recko3.record(&PS[6].ko(0.5))
recko4.record(&PS[8].ko(0.5))
recko5.record(&PS[10].ko(0.5))
recko6.record(&PS[12].ko(0.5))
recko7.record(&PS[14].ko(0.5))
recko8.record(&PS[16].ko(0.5))
recko9.record(&PS[18].ko(0.5))
recko10.record(&PS[20].ko(0.5))
recko11.record(&PS[22].ko(0.5))
recko12.record(&PS[24].ko(0.5))
recko13.record(&PS[26].ko(0.5))
recko14.record(&PS[28].ko(0.5))
recko15.record(&PS[30].ko(0.5))
recko16.record(&PS[32].ko(0.5))
recko17.record(&PS[34].ko(0.5))
recko18.record(&PS[36].ko(0.5))
recko19.record(&PS[38].ko(0.5))
recko20.record(&PS[40].ko(0.5))

rechna20.record(&node[20].h_nax(0.5))
rechna19.record(&node[19].h_nax(0.5))
rechna18.record(&node[18].h_nax(0.5))
rechna17.record(&node[17].h_nax(0.5))
rechna16.record(&node[16].h_nax(0.5))
rechna15.record(&node[15].h_nax(0.5))
rechna14.record(&node[14].h_nax(0.5))
rechna13.record(&node[13].h_nax(0.5))
rechna12.record(&node[12].h_nax(0.5))
rechna11.record(&node[11].h_nax(0.5))
rechna10.record(&node[10].h_nax(0.5))
rechna9.record(&node[9].h_nax(0.5))
rechna8.record(&node[8].h_nax(0.5))
rechna7.record(&node[7].h_nax(0.5))
rechna6.record(&node[6].h_nax(0.5))
rechna5.record(&node[5].h_nax(0.5))
rechna4.record(&node[4].h_nax(0.5))
rechna3.record(&node[3].h_nax(0.5))
rechna2.record(&node[2].h_nax(0.5))
rechna1.record(&node[1].h_nax(0.5))
rechna0.record(&node[0].h_nax(0.5))
/*
recmk20.record(&node[20].m_kma(0.5))
recmk19.record(&node[19].m_kma(0.5))
recmk18.record(&node[18].m_kma(0.5))
recmk17.record(&node[17].m_kma(0.5))
recmk16.record(&node[16].m_kma(0.5))
recmk15.record(&node[15].m_kma(0.5))
recmk14.record(&node[14].m_kma(0.5))
recmk13.record(&node[13].m_kma(0.5))
recmk12.record(&node[12].m_kma(0.5))
recmk11.record(&node[11].m_kma(0.5))
recmk10.record(&node[10].m_kma(0.5))
recmk9.record(&node[9].m_kma(0.5))
recmk8.record(&node[8].m_kma(0.5))
recmk7.record(&node[7].m_kma(0.5))
recmk6.record(&node[6].m_kma(0.5))
recmk5.record(&node[5].m_kma(0.5))
recmk4.record(&node[4].m_kma(0.5))
recmk3.record(&node[3].m_kma(0.5))
recmk2.record(&node[2].m_kma(0.5))
recmk1.record(&node[1].m_kma(0.5))
recmk0.record(&node[0].m_kma(0.5))
*/
//recmna.record(&node[10].m_nax( 0.5 ))
//rechna.record(&node[10].h_nax( 0.5 ))
//recnk.record(&node[10].m_kma( 0.5 ))
//recina.record(&node[10].ina( 0.5 ))
//recik.record(&node[10].ik( 0.5 ))

recvais.record(&nakeaxon.v(0.5))
recvsoma.record(&soma.v(0.5))

objref saveVmatrix
saveVmatrix= new Matrix()
objref saveV
saveV= new File()
saveV.wopen("x30y0-z30_SE@node10_100Hz_10s.dat")